/**
 * @file Cell.hoc
 * @brief
 * @author king
 * @date 2009-07-08
 * @remark Copyright © BBP/EPFL 2005-2011; All rights reserved. Do not distribute without further notice.
 */

//{load_file("./nrn_lib/share/nrn/lib/hoc/stdlib.hoc")}
{load_file("./nrn_lib/share/nrn/lib/hoc/import3d.hoc")}
//{load_file("fileUtils.hoc")}
{load_file("MorphIO.hoc")}


// In case in SimConfig there's a new extension registered, pass that info to Cell to attempt lo load it
objref ext_simconfig

if (name_declared("simConfig")) {
    execute1("ext_simconfig = simConfig")  // Hoc way of doing late-binding
}

//objref pyobj
//pyobj = new PythonObject()
begintemplate Cell
public init, printInfo, execute_commands, AddHocMorph, AddMorph, getCCell, setCCell, geom_nsec, geom_nseg_lambda, geom_nseg_fixed, SetCellProperties, connect2target, delete_axon, insertChannel, geom_nseg, init_G_n_C
public locateBAPSite, getLongestBranch, locateSites2, enable_ttx, disable_ttx
public soma, dend, apic, axon, endfoot, myelin, nSecAxonal, nSecAxonalOrig, segCounts, rnglist, synHelperList, indexSections
public synlist, all, apical, basal, somatic, axonal, endfeet, gid, nSecAll, nSecSoma, nSecApical, nSecBasal, clear, ASCIIrpt, HDF5rpt, APC, seg_g_pas
public sec_adj_mat, init_sec_adj, print_sec_adj, seg_adj_mat, init_seg_adj, print_seg_adj,C, init_voltage, eval, evec, init_eigen, ri_vec, p_ri_vec, area_vec,seg_id_vec,seg_p_id_vec, init_ri_n_area, print_ri_n_area, sec_idx,G, D, init_D, seg_L, matrix_to_csv, vector_to_csv,sec_id,sec_p_id
objref synlist, all, apical, basal, somatic, axonal, endfeet, this, CCellRef, ASCIIrpt, HDF5rpt, APC, segCounts, rnglist, synHelperList, sec_adj_mat, seg_adj_mat, evec, eval, ri_vec, area_vec,seg_id_vec, seg_p_id_vec, p_ri_vec, sec_idxs, G, C, D, seg_L,seg_g_pas,sec_id,sec_p_id

//! Used when computing nseg per section
external lambda_f

external ext_simconfig

//external pyobj
//external terminate

/*!
 * Constructor to create a Cell object usable in the bbp toolchain
 *
 * @param $1 gid [optional] Unique identifier for this cell if it to be used in a network
 * @param $s2 full path to morphology [optional] file to load in cell's geometric information
 */


proc matrix_to_csv(){localobj f
	f = new File()
	f.wopen($s2)
	$o1.fprint(f,"%-8g",",")
	f.close()
}

proc vector_to_csv(){localobj f
	f = new File()
	f.wopen($s2)
	$o1.printf(f)
	f.close()
}

proc init() {
    gid     = 0
    all     = new SectionList()
    somatic = new SectionList()
    basal   = new SectionList()
    apical  = new SectionList()
    axonal  = new SectionList()
    forall delete_section()
    if(numarg()>0) gid = $1
    if(numarg()>1){
        AddMorph($s2)
    }

    synlist = new List()
    rnglist = new List()
    synHelperList = new List()
}
create soma[1], dend[1], apic[1], axon[1], myelin[1], endfoot[1]

/**
 *  Execute hoc commands in the cell's context.
 *
 * @param $o1 python List holding commands
 */
/*
*proc execute_commands () { localobj cmds
*    cmds = $o1
*    for i = 0, pyobj.len(cmds) - 1 {
*        execute(cmds._[i], this)
*    }
*}
*
*
*  Load hoc-based morphology.
*
* @param $o1 python List holding morphology hoc commands
*/
proc AddHocMorph() {
    execute_commands($o1)
    indexSections()
    //geom_nsec()
}

proc AddMorph(){ localobj morph, import, strobj, morphPath, extension, global_extension, commands
    forall delete_section()

    strobj = new StringFunctions()
    morphPath = new String()
    extension = new String()
    sscanf($s1, "%s", morphPath.s)
    sscanf($s1, "%s", extension.s)
    strobj.right(extension.s, strobj.len(extension.s) - 4)
    strobj.tail(extension.s, "\\.", extension.s) // remove until dot (inclusive)

    // V5 will always ask ASCII morphologies. We need to replace the extension
    // in case neurodamus is requesting another morphology type
    if( object_id(ext_simconfig) != 0 && strcmp(extension.s, "asc") == 0 ) {
        global_extension = ext_simconfig.getMorphologyExtension()
        if ( strcmp(global_extension.s, extension.s) != 0 && strcmp(global_extension.s, "")) {
            strobj.left(morphPath.s, strobj.len(morphPath.s) - strobj.len(extension.s) - 1)
            sprint(morphPath.s, "%s.%s", morphPath.s, global_extension.s)
            extension.s = global_extension.s
        }
    }

    if( strcmp(extension.s, "hoc") == 0 ) {
        xopen(morphPath.s)
        indexSections()
        geom_nsec()
        return
    }

    if( strcmp(extension.s, "h5") == 0 ) {
        morphio_read(this, morphPath.s)
        indexSections()
        geom_nsec()
        return
    }

    // Classic formats
    if( strcmp(extension.s, "asc") == 0 ) {
        morph = new Import3d_Neurolucida3()
    } else if( strcmp(extension.s, "swc") == 0 ) {
        morph = new Import3d_SWC_read()
	indexSections()
    } else {
        terminate("Unsupported file format: Morphology file has to end with .asc or .swc" )
    }

    morph.quiet = 1
    morph.input($s1)
    import = new Import3d_GUI(morph, 0)
    import.instantiate(this)
    indexSections(import)
    geom_nsec()
  
}


/**
 * Replace the axon built from the original morphology file with a stub axon.  If no args are given,
 * The stub axon will attempt to use diam info from original axon and L=30.  If args are present, the
 * axon diam is tapered according to the values given.  Also, axon[0].L = 20, axon[1].L = 30.
 * An optional myelin section can be added according to a flag.
 *
 * @param $1 Initial diameter for axon[0]
 * @param $2 diameter at end of axon[0], start of axon[1]
 * @param $3 diameter at end of axon[1]
 * @param $4 diameter of myelin section (if set to 0, then not created at all)
 */
proc delete_axon(){ local nSec, D1, D2, dist, i1, i2, count

    // preserve the number of original axonal sections
    nSec  = 0
    forsec axonal{nSec = nSec + 1}

    // Try to grab info from original axon
    if(nSec == 0){ //No axon section present
        //is this actually working?  Seems it would cause problems if we ever did have cells with 0 axon sections
        D1 = D2 = 1
    } else {
        access axon[0]
        i1 = i2 = v(0.0001) // used when serializing sections prior to sim start
        D1 = D2 = diam
        if( nSec > 1 ){ //More than one axon section present
            access soma distance() //to calculate distance from soma
            count = 0
            forsec axonal{   // loop through all axon sections and check for 60um distance
                if( count == 1 ){
                    i2 = v(0.0001)
                }
                count = count + 1
                dist = distance(0.5)
                if( dist > 60 ){ //if section is longer than 60um then store diam and exit from look
                    D2 = diam
                    break
                }
            }
        }
    }

    // get rid of the old axon
    forsec axonal{delete_section()}
    execute1("create axon[2]\n", this)

    // new axon dependant on args passed (or lack thereof)
    access axon[0] {
        if( numarg() == 0 ) {
            L = 30
            diam = D1
            nseg = 1 + 2*int(L/40)
        } else {
            L = 20
            nseg = 1+2*int(L/10)
            diam(0:1) = $1:$2
        }
        all.append()
        axonal.append()
        v(0.0001) = i1
    }
    access axon[1] {
        L = 30
        if( numarg() == 0 ) {
            diam = D2
            nseg = 1 + 2*int(L/40)
        } else {
            nseg = 1+2*int(L/10)
            diam(0:1) = $2:$3
        }
        all.append()
        axonal.append()
        v(0.0001) = i2
    }
    nSecAxonal = 2

    if( numarg() > 0 ) if ( $4 ) {
        execute1("create myelin[1]\n", this)
        access myelin{
            L = 1000
            nseg = 1+2*int(L/100)
            diam = $4
            v(0.0001) = i1
        }
        connect myelin(0), axon[1](1)
    }

    // I am not sure if these connection methods have different consequences.  Maybe someone can reconcile that later?
    if( numarg() == 0 ) {
        soma[0] connect axon[0](0), 1
        axon[0] connect axon[1](0), 1
    } else {
        connect axon(0), soma(0.5)
        connect axon[1](0), axon[0](1)
        access soma
    }
}


proc geom_nseg() {
    freq = 100      // Hz, frequency at which AC length constant will be computed
    d_lambda = 0.1
    soma area(0.5) // make sure diam reflects 3d points
    forall { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  }
}

/**
*
* Enable TTX by inserting TTXDynamicsSwitch and setting ttxo to 1.0
*
*/
proc enable_ttx() {

    forsec all {
        // Insert the mechanism that controls the ttx concentration
        // Na channels should use the ttxo variable set by this mechanism
        // to switch on/off
        if (!ismembrane("TTXDynamicsSwitch")) {
            execute1( "insert TTXDynamicsSwitch" )
        }
        ttxo_level_TTXDynamicsSwitch = 1.0
    }

}


/**
*
* Disable TTX by inserting TTXDynamicsSwitch and setting ttxo to 1e-14
*
*/
proc disable_ttx() {

    forsec all {
        if (!ismembrane("TTXDynamicsSwitch")) {
            execute1( "insert TTXDynamicsSwitch" )
        }

        // Use 1e-14 instead of 0.0. According to M.Hines setting ttxo could
        // result in unexpected behavior
        ttxo_level_TTXDynamicsSwitch = 1e-14
    }

}

proc SetCellProperties(){local Rm,v_init
        Rm = $1
        v_init = $2
        forall {
                insert pas
                Ra = 80
                g_pas=1/Rm
                e_pas=v_init
                cm = 1
        }

        //whenever the Cell properties (resistance esp.) change, recalculate how a section divides into segments
       	//geom_nseg()  //for now, let the CCell do this after biophys is executed
}


/*!
 * Iterate over the section and compute how many sqgments should be allocate to each.  This number
 * is influenced by the mechanisms distributed, so this function should be called after assigning biophys
 */
proc geom_nseg_lambda() { local secIndex
    soma area(.5) // make sure diam reflects 3d points

    secIndex=0
    forsec all {
        nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1

        segCounts.x[secIndex] = nseg
        secIndex = secIndex+1
    }
}


/*!
 * Iterate over the section and compute how many sqgments should be allocate to each.  This number
 * is influenced by the mechanisms distributed, so this function should be called after assigning biophys
 * @param $1 nseg length
 */
proc geom_nseg_fixed() { local secIndex, chunkSize
    chunkSize = 40
    if( numarg() > 0 ) {
        chunkSize = $1
    }
    soma area(.5) // make sure diam reflects 3d points
    secIndex=0
    forsec all {
        nseg = 1 + 2*int(L/chunkSize)
        segCounts.x[secIndex] = nseg
        secIndex = secIndex+1
    }
}


/*!
 * Count up the number of sections. Additionally, assign as estimate to the nseg var of each section, but this
 * will most likely change after biophys are assigned and geom_nseg called
 */
proc geom_nsec() { local nSec
    nSec = 0
    forsec all {
        //nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1
        nSec = nSec + 1
        //print nseg, " ", L
    }
    nSecAll = nSec
    nSec = 0
    forsec somatic { nSec = nSec + 1}
    nSecSoma	= 	nSec
    nSec = 0
    forsec apical { nSec = nSec + 1}
    nSecApical= 	nSec
    nSec = 0
    forsec basal { nSec = nSec + 1}
    nSecBasal	= 	nSec
    nSec = 0
    forsec axonal { nSec = nSec + 1}
    nSecAxonalOrig = nSecAxonal = nSec

    segCounts = new Vector()
    segCounts.resize(nSecAll)
    nSec=0
    forsec all {
        segCounts.x[nSec] = nseg
        nSec = nSec+1
    }
}

obfunc getCCell(){
	return CCellRef
}
proc setCCell(){
	CCellRef = $o1
}

//-----------------------------------------------------------------------------------------------

/*!
 * Assign section indices to the section voltage value.  This will be useful later for serializing
 * the sections into an array.  Note, that once the simulation begins, the voltage values will revert to actual data again.
 *
 * @param $o1 Import3d_GUI object (optional)
 */
proc indexSections() { local index  localobj tmpString, s
    if(numarg() > 0) {
        tmpString = new String()

        s = $o1.swc.sections
        for i=0, s.count()-1 {
            $o1.name( s.object(i), tmpString.s )
            sprint( tmpString.s, "%s.v(0.0001) = %d", tmpString.s, i )
            execute( tmpString.s, this )
        }
    } else { // if not specified, we index with forsec, used for fasthoc loading
        index = 0
        forsec all {
            v(0.0001) = index
            index += 1
        }
    }
}

//-----------------------------------------------------------------------------------------------

/*!
 * When clearing the model, the circular reference between Cells and CCells must be broken so the
 * entity watching reference counts can work.
 */
proc clear() { localobj nil
    // CCellRef is the wrapper in v5, so CCellRef.CellRef is "this"!
    // Need to break this reference loop to release mem
    CCellRef.CellRef = nil
}

//-----------------------------------------------------------------------------------------------

/*!
 * @param $o1 NetCon source (can be nil)
 * @param $o2 Variable where generated NetCon will be placed
 */
proc connect2target() { //$o1 target point process, $o2 returned NetCon
  soma $o2 = new NetCon(&v(1), $o1)
  $o2.threshold = -30
}

/**
 * @param $s1 Name of the section - soma, dend, apic, axon, or all
 * $param $s2 Name of the channel
 */
proc insertChannel(){ localobj tmpString
    tmpString = new String()
    sprint(tmpString.s, "forsec %s  insert %s", $s1, $s2)
    execute(tmpString.s, this)
}

/*!
 * Calculates the length of the longest branch in a section array
 *
 * @param $s1 Name of the section array - soma, dend, apic, axon, or all
 */
func getLongestBranch(){local maxL,d localobj distallist,sref
    strdef tstr
    sprint(tstr,"%s distance()",$s1)
    execute(tstr,this)

    if (0 == strcmp($s1,"axon")) {
        sprint(tstr,"%s[0] distance(1)",$s1)
        execute(tstr,this)
    }

    maxL = 0
    d = 0
    distallist = new SectionList()
    forsec $s1 {
        sref = new SectionRef()
        if (sref.nchild==0) distallist.append()
    }
    forsec distallist{
        d = distance(1)
        if(maxL<d) maxL = d
    }
    // for the soma case
    if (maxL == 0) {
        $s1 {
            maxL = L
        }
    }

    return maxL
}

/*!
 * Locates the compartments at a certain distance in a section array
 *
 * @param $s1 Name of the section array - soma, dend, apic, axon, or all
 * @param $2 Distance value
 *
 * returns a list of vectors with two values. Every vector in the list [value1, value2]
 * represents one point at the specified distance.
 * value1 is the index of the section in the section array
 * value2 is the x of the compartment in the section
 */
obfunc locateSites2() {local site,d0,d1,siteX,i localobj vv,ll
    strdef tstr
    ll = new List()

    sprint(tstr,"%s distance()", $s1)
    execute(tstr, this)

    if (0 == strcmp($s1,"axon")) {
        sprint(tstr,"%s[0] distance(1)",$s1)
        execute(tstr,this)
    }

    site = $2
    i = 0

    forsec $s1 {
        if (distance(0) < distance(1)) {
            d0 = distance(0)
            d1 = distance(1)
        } else {
            d1 = distance(0)
            d0 = distance(1)
        }

        if (site <= d1 && site >= d0) {
            siteX = (site-d0)/(d1-d0)
            secNum = i
            vv = new Vector()
            ll.append(vv.append(secNum,siteX))
        }

        i = i+1
    }
    return ll
}

/*!
 * Locates a compartment at a certain distance in a section array. If there is more than one compartment is found
 * at this distance, the thickest compartment is chosen
 *
 * @param $s1 Name of the section array - soma, dend, apic, axon, or all
 * @param $2 Distance value
 *
 * returns a vector [value1, value2] that represents one point at the specified distance.
 * value1 is the index of the section in the section array
 * value2 is the x of the segment in the section
 * If no compartment is found at the specified distance, and an empty vector is returned
 */
obfunc locateBAPSite() {local thisdiam, iSite, thickSite localobj sitesList, returnList, thickSection
    strdef locName
    sitesList = locateSites2($s1, $2)
    maxdiam = 0
    for (iSite = 0; iSite < sitesList.count(); iSite += 1) {
        thisdiam = apic[sitesList.o[iSite].x[0]].diam
        if (thisdiam > maxdiam) {
          thickSite = iSite
          maxdiam = thisdiam
        }
    }
    returnList = new Vector()

    if (sitesList.count() == 0) {
        print "*** Unable to find compartment at BAP site ***"
    } else {
        returnList.append(sitesList.o(thickSite).x[0], sitesList.o(thickSite).x[1])
    }

    return returnList
}

proc init_sec_adj(){local my_idx, paren_idx localobj sr
	indexSections()
	sec_adj_mat = new Matrix(nSecAll,nSecAll)
	sec_id = new Vector(nSecAll)
	sec_p_id = new Vector(nSecAll)
	i = 0
	forsec all {
            sr = new SectionRef()
	    sr.sec {my_idx = v}
	    if(sr.has_parent){sr.parent {paren_idx = v}}
	    //printf("(%.0f,%.0f)\n",my_idx,paren_idx)
	    sec_id.x[i] = my_idx
	    if(sr.has_parent){sec_p_id.x[i] = paren_idx
	    }else{sec_p_id.x[i] = -1}
	    sec_adj_mat.x[my_idx][paren_idx] = 1
	    sec_adj_mat.x[paren_idx][my_idx] = 1
	    i = i+1}
	}
proc print_sec_adj(){
  for i=0,sec_adj_mat.nrow-1 {
	for j=0, sec_adj_mat.ncol-1 {
	  printf("%.0f ",sec_adj_mat.x[i][j])
	}
	printf("\n")
  }
}


proc init_ri_n_area(){local sidx, idx, nSeg, my_idx, rim,rip, paren_idx localobj sr
	init_sec_adj()
	nSeg = 0
	forsec all {nSeg = nSeg+nseg}
	ri_vec = new Vector(nSeg)
	p_ri_vec = new Vector(nSeg)
	area_vec = new Vector(nSeg)
	seg_id_vec = new Vector(nSeg)
	seg_p_id_vec = new Vector(nSeg)
	seg_L = new Vector(nSeg)
	seg_g_pas = new Vector(nSeg)
	i = 0
	idx = 0
	forsec all{
	    sr = new SectionRef()
	    my_idx = sec_id.x[i]
	    paren_idx = sec_p_id.x[i]
	    i = i+1
	    tmp = 0
            for (x,0){
	    	seg_g_pas.x[idx] = g_pas
	    	rim = ri(x)
		rip = 0
		printf("my_id = %d, p_id = %d\n",my_idx,paren_idx)
	    	if(tmp == 0){
			ofset = 0
			if(paren_idx >= 0){
			sr.parent {
			rip = ri(1)
			ofset = 1/(2*nseg)
			}
			}	
			seg_p_id_vec.x[idx] = paren_idx  + ofset
		}else{	
			ofset = 0
			seg_p_id_vec.x[idx] = my_idx + x - 1/(sr.sec.nseg)
		}
		tmp = tmp + 1
	    	seg_id_vec.x[idx] = my_idx + x
		sr.sec {seg_L.x[idx] =  L/nseg}
	    	ri_vec.x[idx] = rim
	    	p_ri_vec.x[idx] = rip
		area_vec.x[idx] = area(x)
		idx = idx + 1}

}}


proc print_ri_n_area(){local idx
	idx = 0
	forsec all{
		for (x,0){
			printf("s_idx = %.2f,p_idx =%.2f, ri = %.5f,p_ri = %.5f, area = %.5f \n",seg_id_vec.x[idx],seg_p_id_vec.x[idx],ri_vec.x[idx],p_ri_vec.x[idx],area_vec.x[idx])
			idx = idx +1
		}
	}

}

proc init_G_n_C(){local g
	init_ri_n_area()
	nSeg = seg_id_vec.size()
	G = new Matrix(nSeg,nSeg)
	C = new Vector(nSeg)
	for(i=0; i < nSeg;i+=1){
		C.x[i] = area_vec.x[i]*cm
		my_d_id = seg_id_vec.x[i]
		p_d_id = seg_p_id_vec.x[i]
		G.x[i][i] = -seg_g_pas.x[i]

		my_id = i
		if(p_d_id > 0){
		p_id = seg_id_vec.indwhere("==",p_d_id)
		if(gfloor(my_d_id) - gfloor(p_d_id) != 0){
			g = 1/(p_ri_vec.x[i] + ri_vec.x[i])
					
		}else{
			g = 1/ri_vec.x[i]
		}
		G.x[my_id][p_id] = g
		G.x[p_id][my_id] = g
		}
	}
}

proc init_D(){
	nSeg = seg_id_vec.size()
	D = new Matrix(nSeg,nSeg)
	for(i=0; i < nSeg;i+=1){
		my_d_id = seg_id_vec.x[i]
		p_d_id = seg_p_id_vec.x[i]
		if(p_d_id > 0){
		my_id = i
		p_id = seg_id_vec.indwhere("==",p_d_id)	
		D.x[my_id][p_id] = (1/2)*(seg_L.x[my_id] +seg_L.x[p_id])
		D.x[p_id][my_id] = (1/2)*(seg_L.x[my_id] +seg_L.x[p_id])
		}
	}
}




proc init_eigen(){local my_idx, paren_idx localobj sr
	evec = new Matrix(nSecAll,nSecAll)
	eval = new Vector(nSecAll)
	forsec all {
            sr = new SectionRef()
	    sr.sec {my_idx = v}
	    evec.x[my_idx] = 0
	    if(sr.has_parent){sr.parent {paren_idx = v}}
	    //printf("(%.0f,%.0f)\n",my_idx,paren_idx)
	    evec.x[my_idx][paren_idx] = 0
	    evec.x[paren_idx][my_idx] = 0}
}

proc init_voltage() { local x
    // Loop over all sections in the SectionList "all"
    forsec all {
        // For each section, loop over all points (x from 0 to 1)
        {
            v(0) = $1
            v(1) = $1
        }
    }
}

endtemplate Cell
